PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 600]
  expName = ala-gemma-3-pairs
  keyboardBackend = ioHub
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Routines
  Routine show_match_pairs
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    TextComponent instructions
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Learn these 3 match pairs then press space
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent match1label
      letterHeight = 0.05
      pos = (-.3, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $match_1_label
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    TextComponent match2label
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $match_2_label
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    TextComponent match3label
      letterHeight = 0.05
      pos = (-.3, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $match_3_label
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    ImageComponent match1shape
      image [set every repeat] = $match_1_shape
      pos = (.3, .3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent match2shape
      image [set every repeat] = $match_2_shape
      pos = (.3, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent match3shape
      image [set every repeat] = $match_3_shape
      pos = (.3,-.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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  Routine define_tasks
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    CodeComponent task_order
      Code Type = Py
      Begin Routine:
        import random
        # randomise order of tasks
        # each participant does 3 tasks
        tasks = ["control", "reward", "valence"]
        random.shuffle(tasks)
        task_index = -1
  Routine select_task_and_match_pairs
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    CodeComponent code1
      Code Type = Py
      Begin Routine:
        task_index = task_index+1
        task = tasks[task_index]

        # choose possible labels and possible shapes for this loop's task
        if task == "control":
            possible_labels = ['air', 'earth', 'sky']
            possible_shapes =  ['T.bmp', 'S.bmp', 'C.bmp']
        elif task == "reward":
            possible_labels = ['£100', '£50', '£0']
            possible_shapes =  ['P.bmp', 'D.bmp', 'O.bmp']
        elif task == "valence":
            possible_labels = ['happy', 'neutral', 'sad']
            possible_shapes = ['H.bmp', 'R.bmp', 'X.bmp']

        # shuffle possible labels and possible shapes
        random.shuffle(possible_labels)
        random.shuffle(possible_shapes)

        # set all 3 match pairs labels
        match_1_label = possible_labels[0]
        match_2_label = possible_labels[1]
        match_3_label = possible_labels[2]

        # set all 3 match pairs shapes
        match_1_shape = possible_shapes[0]
        match_2_shape = possible_shapes[1]
        match_3_shape = possible_shapes[2]
  Routine show_a_pair
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = 'm' for match; 'n' for mismatch
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    TextComponent put_label
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label
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    ImageComponent put_shape
      image [set every repeat] = $shape
      pos = (0.3, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = 'm','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if block_count!=1:
            continueRoutine=False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Rest and then press space
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init_block_count
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        block_count=0
  Routine increment_block_count
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        block_count=block_count+1
  Routine write
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        thisExp.addData("task", task)
        thisExp.addData("block_count", block_count)
        thisExp.addData("match_1_label", match_1_label)
        thisExp.addData("match_1_shape", match_1_shape)
        thisExp.addData("match_2_label", match_2_label)
        thisExp.addData("match_2_shape", match_2_shape)
        thisExp.addData("match_3_label", match_3_label)
        thisExp.addData("match_3_shape", match_3_shape)
        thisExp.addData("trial_index", trial_index)
        thisExp.addData("trial_type", trial_type)
        thisExp.addData("label", label)
        thisExp.addData("shape", shape)
        thisExp.addData("response", response.keys)
        thisExp.addData("rt", response.rt)
        thisExp.addData("acc", acc)
  Routine decide_what_pair
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        trial_index=trial_index+1
        trial_type=trial_list[trial_index]
        if trial_type == "match1":
            label=match_1_label
            shape=match_1_shape
        if trial_type == "match2":
            label=match_2_label
            shape=match_2_shape
        if trial_type == "match3":
            label=match_3_label
            shape=match_3_shape
        if trial_type == "mismatch":
            # choose mismatch pair without shuffling possibles (or do copy.deepcopy)
            while True:
                indices=[0,1,2]
                random.shuffle(indices)
                label=possible_labels[indices[0]]
                random.shuffle(indices)
                shape=possible_shapes[indices[0]]
                if label==match_1_label and shape==match_1_shape or label==match_2_label and shape==match_2_shape or label==match_3_label and shape==match_3_shape:
                    continue
                else:
                    break
  Routine define_trial_list
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        trial_list=["match1"]*match1_n+["match2"]*match2_n+["match3"]*match3_n+["mismatch"]*mismatch_n
        random.shuffle(trial_list)
        trial_index=-1
  Routine eval
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    CodeComponent do_eval
      Code Type = Py
      Begin Routine:
        acc=-999
        if trial_type == "match1" or trial_type=="match2" or trial_type == "match3":
            if response.keys == "m":
                acc=1
            else:
                acc=0
        if trial_type == "mismatch":
            if response.keys == "n":
                acc=1
            else:
                acc=0
  Routine fix
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    TextComponent fixn
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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  Routine parameters
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    CodeComponent params
      Code Type = Py
      Begin Routine:
        # how many blocks?
        blocks_n = 2
        # how many trials in a block?
        trials_n = 30
        # how many of each trial type in a block?
        match1_n = 5
        match2_n = 5
        match3_n = 5
        mismatch_n = 15
  Routine the_end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for participating, the experiment is now finished and will close itself down in a few seconds
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  Routine feedback
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    CodeComponent determine_fback_msg
      Code Type = Py
      Begin Routine:
        feedback_msg = "error in feedback"
        feedback_color = "black"
        if acc == 1:
            feedback_msg = "Correct"
            feedback_color = "green"
        if acc == 0:
            feedback_msg = "WRONG!"
            feedback_color = "red"
    TextComponent text_4
      color [set every repeat] = $feedback_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = $feedback_msg
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Flow
  Routine define_tasks
  Routine parameters
  LoopInitiator tasks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine select_task_and_match_pairs
    Routine show_match_pairs
    Routine init_block_count
    LoopInitiator blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = blocks_n
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      Routine increment_block_count
      Routine define_trial_list
      LoopInitiator trials loopType="TrialHandler"
        loopType = sequential
        nReps = trials_n
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        Routine decide_what_pair
        Routine fix
        Routine show_a_pair
        Routine eval
        Routine feedback
        Routine write
      LoopTerminator trials
      Routine rest
    LoopTerminator blocks
  LoopTerminator tasks_loop
  Routine the_end
