PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 600]
  expName = ala-gemma
  keyboardBackend = ioHub
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Routines
  Routine learn_me
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    TextComponent message_to_pp
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Learn this mapping then press space
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    TextComponent text_label
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $match_label
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    ImageComponent image_shape
      image [set every repeat] = $match_shape
      pos = (0, -.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent dismiss_learn
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine choose_mismatch_pair
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    CodeComponent find_mismatch_pair
      Code Type = Py
      Begin Routine:
        # choose mismatch pair without shuffling possibles (or do copy.deepcopy)
        import random
        while True:
            indices=[0,1,2]
            random.shuffle(indices)
            mismatch_label=possible_labels[indices[0]]
            random.shuffle(indices)
            mismatch_shape=possible_shapes[indices[0]]
            if mismatch_label==match_label and mismatch_shape==match_shape:
                continue
            else:
                break
        thisExp.addData("match_label",match_label)
        thisExp.addData("match_shape",match_shape)

        thisExp.addData("mismatch_label",mismatch_label)
        thisExp.addData("mismatch_shape",mismatch_shape)
  Routine establish_trial_match_or_mismatch
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  Routine trial_list
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    CodeComponent code_2
      Code Type = Py
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  Routine choose_trial_type
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        trial_type=trial_list[trial_count]
        if trial_type=="match":
            label=match_label
            shape=match_shape
        elif trial_type=="mismatch":
            label=mismatch_label
            shape=mismatch_shape
        thisExp.addData("trial_type", trial_type)
        thisExp.addData("trial_count", trial_count)
        thisExp.addData("trial_label", label)
        thisExp.addData("trial_shape", shape)
  Routine put
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    TextComponent put_label
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label
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    ImageComponent put_shape
      image [set every repeat] = $shape
      pos = (0, -.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    KeyboardComponent trial_response
      allowedKeys = 'n','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent debug_set
      Code Type = Py
      Begin Routine:
        debug_msg=str(trial_count)+" "+str(trial_type)
    TextComponent debug_put
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $debug_msg
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  Routine eval
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        acc=-1
        if   trial_response and trial_response.keys == "m" and trial_type == "match":
            acc=1
        elif trial_response and trial_response.keys == "m" and trial_type == "mismatch":
            acc=0
        elif trial_response and trial_response.keys == "n" and trial_type == "match":
            acc=0
        elif trial_response and trial_response.keys == "n" and trial_type == "mismatch":
            acc=1
        thisExp.addData("acc", acc)
  Routine rest_period
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    TextComponent take_rest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Rest. Then press space
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    KeyboardComponent rest_period_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fix_cross
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    TextComponent text_4
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = +
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  Routine initialisation
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    CodeComponent init
      Code Type = Py
      Begin Routine:
        import random

        # choose the task at random for this participant
        mytasks = ["control", "reward", "valence"]
        random.shuffle(mytasks)
        task = mytasks[0]

        # choose possible labels and possible shapes for this participant's task
        if task == "control":
            possible_labels = ['air', 'earth', 'sky']
            possible_shapes =  ['T.bmp', 'S.bmp', 'C.bmp']
        elif task == "reward":
            possible_labels = ['£100', '£50', '£0']
            possible_shapes =  ['P.bmp', 'D.bmp', 'O.bmp']
        elif task == "valence":
            possible_labels = ['happy', 'neutral', 'sad']
            possible_shapes = ['H.bmp', 'R.bmp', 'X.bmp']

        # initialise pair_count
        pair_index=-1

        # initialise block count
        block_count=0
  Routine set_match_pair
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        pair_index = pair_index + 1
        match_label = possible_labels[pair_index]
        match_shape = possible_shapes[pair_index]
  Routine increment_trial_count
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    CodeComponent incr
      Code Type = Py
      Begin Routine:
        trial_count = trial_count + 1
  Routine set_trial_type_list
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        # init a trial type list
        trial_list=["match"]*20+["mismatch"]*40
        random.shuffle(trial_list)
  Routine set_counters
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    CodeComponent set_and_incr
      Code Type = Py
      Begin Routine:
        trial_count=-1
        block_count=block_count+1
Flow
  Routine initialisation
  LoopInitiator pairs loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine set_match_pair
    Routine learn_me
    LoopInitiator blocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine set_counters
      Routine set_trial_type_list
      LoopInitiator trials loopType="TrialHandler"
        loopType = sequential
        nReps = 60
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        Routine increment_trial_count
        Routine choose_mismatch_pair
        Routine choose_trial_type
        Routine fix_cross
        Routine put
        Routine eval
      LoopTerminator trials
      Routine rest_period
    LoopTerminator blocks
  LoopTerminator pairs
