PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800, 600]
  expName = ala
  keyboardBackend = ioHub
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Routines
  Routine choose_match_pair
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import random

        # choose the task at random for this participant
        mytasks = ["control", "reward", "valence"]
        random.shuffle(mytasks)
        task = mytasks[0]

        # choose the match label and match shape
        # at random for this participant
        if task == "control":
            possible_labels = ['air', 'earth', 'sky']
            possible_shapes =  ['T.bmp', 'S.bmp', 'C.bmp']
        elif task == "reward":
            possible_labels = ['£100', '£50', '£0']
            possible_shapes =  ['P.bmp', 'D.bmp', 'O.bmp']
        elif task == "valence":
            possible_labels = ['happy', 'neutral', 'sad']
            possible_shapes = ['H.bmp', 'R.bmp', 'X.bmp']
        random.shuffle(possible_labels)
        match_label = possible_labels[0]
        random.shuffle(possible_shapes)
        match_shape = possible_shapes[0]
  Routine learn_me
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Learn this mapping then press space
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    TextComponent text
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $match_label
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    ImageComponent image
      image [set every repeat] = $match_shape
      pos = (0, -.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent dismiss_learn
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine choose_mismatch_pair
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    CodeComponent find_mismatch_pair
      Code Type = Py
      Begin Routine:
        # choose mismatch pair
        import random
        while True:
            random.shuffle(possible_labels)
            mismatch_label=possible_labels[0]
            random.shuffle(possible_shapes)
            mismatch_shape=possible_shapes[0]
            if mismatch_label==match_label and mismatch_shape==match_shape:
                continue
            else:
                break
        thisExp.addData("match_label",match_label)
        thisExp.addData("match_shape",match_shape)

        thisExp.addData("mismatch_label",mismatch_label)
        thisExp.addData("mismatch_shape",mismatch_shape)
  Routine establish_trial_match_or_mismatch
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  Routine trial_list
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        trial_list=["match"]*20+["mismatch"]*40
        random.shuffle(trial_list)
        trial_index=-1
  Routine choose_trial_type
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        trial_index=trial_index+1
        trial_type=trial_list[trial_index]
        thisExp.addData("trial_type", trial_type)
        if trial_type=="match":
            label=match_label
            shape=match_shape
        elif trial_type=="mismatch":
            label=mismatch_label
            shape=mismatch_shape
        thisExp.addData("trial_index", trial_index)
        thisExp.addData("trial_label", label)
        thisExp.addData("trial_shape", shape)
  Routine put
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    TextComponent put_label
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $label
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    ImageComponent put_shape
      image [set every repeat] = $shape
      pos = (0, -.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent trial_response
      allowedKeys = 'n','m'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eval
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        acc=-1
        if   trial_response and trial_response.keys == "m" and trial_type == "match":
            acc=1
        elif trial_response and trial_response.keys == "m" and trial_type == "mismatch":
            acc=0
        elif trial_response and trial_response.keys == "n" and trial_type == "match":
            acc=0
        elif trial_response and trial_response.keys == "n" and trial_type == "mismatch":
            acc=1
        thisExp.addData("acc", acc)
  Routine rest_period
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Rest. Then press space
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    KeyboardComponent rest_period_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent reset_trial_index
      Code Type = Py
      Begin Routine:
        trial_index=-1
  Routine fix_cross
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    TextComponent text_4
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine choose_match_pair
  Routine trial_list
  Routine learn_me
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 60
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      Routine choose_mismatch_pair
      Routine choose_trial_type
      Routine fix_cross
      Routine put
      Routine eval
    LoopTerminator trials
    Routine rest_period
  LoopTerminator blocks
